PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = norm
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = demo
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        sys.path.insert(0, '..', '..') # to load module from neighbouring folder
        import motbox as pymot

        track_filename = "../examples/data/T220.csv"
      Begin Routine:
        T = pymot.Track()
        T.load_from_csv(track_filename)
        T.scale(30) # px per inch

        P = pymot.Puppeteer()
        P.track = T
        P.clone_template_psychopy(p1_template, 4)
      Each Frame:
        stop_time = 4
        if t >= 0 and t <= stop_time:
            map(lambda x: x.setAutoDraw(True), P.objects)
            P.update_positions_psychopy(t)

        if t > stop_time and t <= (stop_time + 1):
            map(lambda x: x.setAutoDraw(True), P.objects)
            P.update_positions_psychopy(4)

        if t > (stop_time + 1):
            map(lambda x: x.setAutoDraw(False), P.objects)
    ImageComponent p1_template
      stopVal [duration (s)] = 1.0
      pos = (10000, 10000)
      units = pix
      startVal [time (s)] = 0.0
      image = img/happy-50-green.png
      size = (64, 64)
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine trial
